WorkflowBuilder(Version=2.9.0)
ExternalizedMapping(TaskLogicPath(DisplayName=TaskPath), RigPath, SessionPath)
-> IncludeWorkflow
  Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai
  TaskLogicPath=C:\git\Aind.Behavior.DynamicForaging\local\DynamicForaging_AindDynamicForagingTaskLogic.json
  RigPath=c:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingRig.json
  SessionPath=c:\git\Aind.Behavior.DynamicForaging\local\Session.json

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindDynamicForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindDynamicForagingDataSchema.Session>)
    -> Take(Count=1)
    -> AsyncSubject SessionSchema

    SubscribeSubject RawRigSchema
    -> AindDynamicForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindDynamicForagingDataSchema.AindDynamicForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindDynamicForagingDataSchema.DeserializeFromJson(Type=TypeMapping<AindDynamicForagingDataSchema.AindDynamicForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

GroupWorkflow Init
    Bonsai.Scripting.Python.CreateRuntime(PythonHome=../.venv, ScriptPath=./Extensions\bonsai.py)

    BooleanProperty(Value=false)
    -> Take(Count=1)
    -> BehaviorSubject IsWaveformUploadDone

    CreateAutoWaterState(Value=nil)
    -> Take(Count=1)
    -> BehaviorSubject GlobalAutoWaterState

    SubscribeSubject StartExperiment
    -> Unit
    -> PublishSubject TriggerHarpReadDump

    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent
    BehaviorSubject<AindDynamicForagingDataSchema.TrialOutcome> GlobalTrialOutcome
    BehaviorSubject<AindDynamicForagingDataSchema.Trial> GlobalTrial
    BehaviorSubject<AindDynamicForagingDataSchema.TrialMetrics> GlobalTrialMetrics

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed)
    -> AsyncSubject RngSeedValue

    BooleanProperty(Value=false)
    -> Take(Count=1) => #21
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #24
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #27
    #21, #24, #27 -> Merge
    -> BehaviorSubject ExperimentState

    DoubleProperty(Value=-5) => #30
    DoubleProperty(Value=5) => #31
    #30, #31 -> Zip
    -> Take(Count=1)
    -> AsyncSubject BiasOffsetBounds

GroupWorkflow StartupLogic
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    Disable SubscribeSubject IsWaveformUploadDone
    -> Disable Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Disable Timeout(DueTime=PT10S)
    -> Disable Take(Count=1) => #4
    #0, #4 -> Disable Zip
    -> Take(Count=1)
    -> Unit
    -> MulticastSubject StartLogging
    -> Delay(DueTime=PT2S)
    -> MulticastSubject StartExperiment

Annotation(Text="")
-> IncludeWorkflow(Path=Extensions\Hardware.bonsai)

GroupWorkflow OperationControl
    GroupWorkflow Lickometers
        Defer LicketySplitLeft => #0
            SubscribeSubject HarpLickometerLeftEvents
            -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
            -> MemberSelector(Selector=Value)
            -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> BitwiseNot => #6
            #1 -> MemberSelector(Selector=Seconds) => #7
            #6, #7 -> WithLatestFrom
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometerLeft)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #3
        #0, #3 -> SubscribeWhen => #4
        Defer BehaviorBoardDIPort0 => #5
            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #1
            -> MemberSelector(Selector=Value)
            -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> BitwiseNot => #6
            #1 -> MemberSelector(Selector=Seconds) => #7
            #6, #7 -> Zip
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometerLeft)
        -> Bonsai.Scripting.Expressions.ExpressionCondition isnull => #8
          Expression: it == null
        #5, #8 -> SubscribeWhen => #9
        #4, #9 -> Merge => #10
        Defer LicketySplitRight => #11
            SubscribeSubject HarpLickometerRightEvents
            -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
            -> MemberSelector(Selector=Value)
            -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
            -> DistinctUntilChanged
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            #1 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> WithLatestFrom
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometerRight)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #14
        #11, #14 -> SubscribeWhen => #15
        Defer BehaviorBoardDIPort1 => #16
            SubscribeSubject HarpBehaviorEvents
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #1
            -> MemberSelector(Selector=Value)
            -> HasFlag(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
            -> DistinctUntilChanged
            -> Condition => #5
                WorkflowInput Source1
                -> WorkflowOutput
            #1 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> Zip
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometerRight)
        -> Bonsai.Scripting.Expressions.ExpressionCondition isnull => #19
          Expression: it == null
        #16, #19 -> SubscribeWhen => #20
        #15, #20 -> Merge => #21
        #10, #21 -> Merge
        -> Bonsai.Harp.CreateTimestamped
        -> PublishSubject IsRightLickEvent

    GroupWorkflow RewardDelivery
        BehaviorSubject<System.Boolean> GiveRewardRight

        BehaviorSubject<System.Reactive.Unit> SetRewardAmount => #1
        Unit => #2
        #1, #2 -> Merge
        -> Defer SetRewardAmount => #4
            WorkflowInput Source1

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=RewardSize.LeftValueVolume) => #2
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Calibration.WaterValveLeft) => #4
            #2, #4 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #6
              Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
            Annotation ToMilliseconds(Text="") => #7
            #6, #7 -> Multiply(Operand=DoubleProperty(Value=1000)) => #8
            -> BooleanProperty(Value=false) => #9
            #9, #8 -> Zip
            -> MulticastSubject SetIsRightValveMs

            SubscribeSubject TaskLogicParameters
            -> MemberSelector(Selector=RewardSize.RightValueVolume) => #13
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Calibration.WaterValveRight) => #15
            #13, #15 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #17
              Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
            Annotation ToMilliseconds(Text="") => #18
            #17, #18 -> Multiply(Operand=DoubleProperty(Value=1000)) => #19
            -> BooleanProperty(Value=true) => #20
            #20, #19 -> Zip
            -> MulticastSubject SetIsRightValveMs
        SubscribeSubject HarpBehaviorEvents => #5
        #4, #5 -> SubscribeWhen

        SubscribeSubject GiveRewardRight => #7
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1)) => #9
        #7 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0)) => #12
        #9, #12 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Tuple(System.Boolean,System.Double)> SetIsRightValveMs => #15
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Condition gt0
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort1) => #19
        #15 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Condition gt0
            WorkflowInput Source1
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0) => #23
        #19, #23 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Boolean> SetRightOpen => #26
        -> Condition SetOpen => #27
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=None)) => #28
        #27 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1)) => #29
        #28, #29 -> Merge => #30
        #26 -> Condition SetClosed => #31
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort1)) => #32
        #31 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort1)) => #33
        #32, #33 -> Merge => #34
        #30, #34 -> Merge
        -> MulticastSubject HarpBehaviorCommands
        -> Unit
        -> MulticastSubject SetRewardAmount

        BehaviorSubject<System.Boolean> SetLeftOpen => #39
        -> Condition SetOpen => #40
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=None)) => #41
        #40 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0)) => #42
        #41, #42 -> Merge => #43
        #39 -> Condition SetClosed => #44
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort0)) => #45
        #44 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort0)) => #46
        #45, #46 -> Merge => #47
        #43, #47 -> Merge
        -> MulticastSubject HarpBehaviorCommands
        -> Unit
        -> MulticastSubject SetRewardAmount

    GroupWorkflow ManipulatorTask => #2
        BehaviorSubject<System.Boolean> IsRightTriggerQuickRetract
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it ? 2 : 4
        -> Harp.StepperDriver.Format(MessageType=Write, Register=Harp.StepperDriver.TriggerQuickMovement)
        -> MulticastSubject StepperDriverCommands

        BehaviorSubject<System.Boolean> SpoutAvailableState

        SubscribeSubject StartExperiment => #5
        SubscribeSubject ManipulatorPosition => #6
        #5, #6 -> WithLatestFrom
        -> Take(Count=1)
        -> MemberSelector(Selector=Item2)
        -> BehaviorSubject InitialManipulatorPosition
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=InitialManipulatorPosition)
        -> MulticastSubject SoftwareEvent

        SubscribeSubject SpoutAvailableState => #13
        -> SelectMany CalculatePositions => #14
            SubscribeSubject InitialManipulatorPosition => #0
            SubscribeSubject ManipulatorPosition => #1
            #0, #1 -> CombineLatest => #2
            ExternalizedMapping(SpoutDistance) => #3
            #2, #3 -> CalculateSpoutPositions(SpoutDistance=5)
            -> Take(Count=1)
            -> WorkflowOutput
        #13, #14 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform DetermineDirection
          Expression: it.Item1 ? it.Item2.Extended : it.Item2.Retracted
        -> MulticastSubject MoveTo

        BehaviorSubject<System.Double> ManualSpoutDelta
        -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=ManualSpoutDelta) => #19
        BehaviorSubject<System.Double> AutomaticSpoutDelta => #20
        #19, #20 -> Merge
        -> Condition Drop0s => #22
            WorkflowInput Source1
            -> NotEqual(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        DoubleProperty(Value=0) => #23
        #22, #23 -> Scan
            WorkflowInput Source1
            -> MemberSelector(Selector="Accumulation,Value")
            -> Add => #2
            SubscribeSubject BiasOffsetBounds => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform Clamp
              Expression: Math.Min(Math.Max(Item1, Item2.Item1), Item2.Item2)
            -> WorkflowOutput
        -> BehaviorSubject ManipulatorBiasTracker => #25
        SubscribeSubject InitialManipulatorPosition
        -> MemberSelector(Selector=X) => #27
        #25, #27 -> WithLatestFrom
        -> Add
        -> InputMapping(X(Selector=it))
        -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=0)
        -> MulticastSubject SingleAxisMoveTo

        SubscribeSubject ManipulatorBiasTracker
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ManipulatorBiasTracker)
        -> MulticastSubject SoftwareEvent
    SubscribeSubject StartExperiment => #3
    #2, #3 -> SubscribeWhen

    GroupWorkflow ManipulatorInitialization
        IntProperty(Value=0)
        -> Delay(DueTime=PT0.5S)
        -> Unit => #2
        Annotation "This is a publish subject!"(Text="") => #3
        #2, #3 -> MulticastSubject HomeMotors
        -> SelectMany WaitForHomed
            SubscribeSubject IsHomed
            -> DelaySubscription(DueTime=PT0.2S)
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Timeout(DueTime=PT10S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany GoToInit
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject GoToInitialPosition
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorEvents => #0
        SubscribeSubject TriggeredCamerasReady
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        #0, #2 -> Zip
        -> Take(Count=1)
        -> Delay(DueTime=PT0.5S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput1)) => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput1)) => #13
        #10, #13 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    IncludeWorkflow(Path=Extensions\SecondaryReinforcerDispatcher.bonsai)

    GroupWorkflow SoundBoard => #8
        BehaviorSubject<System.Boolean> PlayGoCue

        SubscribeSubject PlayGoCue => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpSoundCard.Calibration)
        -> MemberSelector(Selector=GoCue)
        -> MemberSelector(Selector=Index)
        -> PropertyMapping(PlaySoundOrFrequency) => #6
        #1, #6 -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=4))
        -> MulticastSubject HarpSoundCardCommands

        Disable SubscribeSubject RigSchema
        -> Disable MemberSelector(Selector=HarpSoundCard.Calibration)
        -> Disable MemberSelector(Selector=GoCue) => #11
        Disable SubscribeSubject RigSchema
        -> Disable MemberSelector(Selector=HarpSoundCard.Calibration)
        -> Disable MemberSelector(Selector=CsPlus) => #14
        Disable SubscribeSubject RigSchema
        -> Disable MemberSelector(Selector=HarpSoundCard.Calibration)
        -> Disable MemberSelector(Selector=CsMinus) => #17
        #11, #14, #17 -> Disable Merge => #18
        -> Disable Condition IsSine
            WorkflowInput Source1
            -> MemberSelector(Selector=WaveformType)
            -> Equal(Operand=WorkflowProperty<AindDynamicForagingDataSchema.WaveformType>(Value=Sine))
            -> WorkflowOutput
        -> Disable CreateObservable UploadTone => #20
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject waveformSpec

            SubscribeSubject waveformSpec
            -> MemberSelector(Selector=Frequency.Value)
            -> PropertyMapping(Frequency) => #5
            DoubleProperty(Value=96000) => #6
            SubscribeSubject waveformSpec
            -> MemberSelector(Selector=Duration)
            -> PropertyMapping(Value) => #9
            #6, #9 -> Multiply(Operand=FloatProperty(Value=0))
            -> PropertyMapping(BufferLength) => #11
            #5, #11 -> Bonsai.Dsp.FunctionGenerator(BufferLength=9600, Frequency=13000, Waveform=Sine, SampleRate=96000, Depth=S32, Amplitude=2147483647, Offset=0, Phase=0)
            -> Take(Count=1) => #13
            SubscribeSubject waveformSpec
            -> MemberSelector(Selector=Index)
            -> PropertyMapping(SoundIndex) => #16
            SubscribeSubject waveformSpec
            -> MemberSelector(Selector=Frequency.Value)
            -> Format
            -> PropertyMapping(SoundName) => #20
            #13, #16, #20 -> Harp.SoundCard.UpdateSoundWaveform(DeviceIndex=nil, SoundIndex=4, SoundName=13000, SampleRate=SampleRate96000Hz)
            -> WorkflowOutput
        #18 -> Disable Condition IsWhiteNoise
            WorkflowInput Source1
            -> MemberSelector(Selector=WaveformType)
            -> Equal(Operand=WorkflowProperty<AindDynamicForagingDataSchema.WaveformType>(Value=WhiteNoise))
            -> WorkflowOutput
        -> Disable CreateObservable UploadWhiteNoise => #22
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject waveformSpec

            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=-2147483646, Upper=2147483646) => #3
            DoubleProperty(Value=96000) => #4
            SubscribeSubject waveformSpec
            -> MemberSelector(Selector=Duration)
            -> PropertyMapping(Value) => #7
            #4, #7 -> Multiply(Operand=FloatProperty(Value=0))
            -> PropertyMapping(Count) => #9
            #3, #9 -> Bonsai.Numerics.Distributions.SampleArray(Count=9600)
            -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=S32, Channels=1)
            -> Take(Count=1) => #12
            SubscribeSubject waveformSpec
            -> MemberSelector(Selector=Index)
            -> PropertyMapping(SoundIndex) => #15
            SubscribeSubject waveformSpec
            -> MemberSelector(Selector=Index)
            -> Format(Format=whitenoise_{0}, Selector=it)
            -> PropertyMapping(SoundName) => #19
            #12, #15, #19 -> Harp.SoundCard.UpdateSoundWaveform(DeviceIndex=nil, SoundIndex=4, SoundName=13000, SampleRate=SampleRate96000Hz)
            -> WorkflowOutput
        #20, #22 -> Disable Merge
        -> Disable Concat
        -> Disable Last
        -> Disable BooleanProperty(Value=true)
        -> Disable MulticastSubject IsWaveformUploadDone
    SubscribeSubject HarpBehaviorEvents => #9
    #8, #9 -> SubscribeWhen

IncludeWorkflow(Path=Extensions\TaskEngine.bonsai)
-> Bonsai.Scripting.Expressions.ExpressionCondition isNull
  Expression: it == null
-> Take(Count=1)
-> Unit
-> Delay(DueTime=PT0.5S)
-> MulticastSubject EndExperiment => #13
SubscribeSubject StartExperiment => #14
#13, #14 -> SubscribeWhen

IncludeWorkflow(Path=Extensions\Logging.bonsai) => #16
SubscribeSubject EndExperiment
-> Delay(DueTime=PT1S) => #18
#16, #18 -> TakeUntil => #19
SubscribeSubject StartLogging => #20
#19, #20 -> SubscribeWhen

SubscribeSubject EndExperiment
-> Take(Count=1)
-> Delay(DueTime=PT2S)
-> WorkflowOutput

GroupWorkflow Visualizers
    Disable IntProperty(Value=0)
    -> Disable Visualizer
        GroupWorkflow TrialPlots
            SubscribeSubject GlobalTrialOutcome
            -> TrialOutcomeVisualizerBuilder(FontSize=16)
            -> VisualizerMapping => #2
            SubscribeSubject SoftwareEvent => #3
            SubscribeSubject IsRightLickEvent
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickRight) => #6
            SubscribeSubject IsRightLickEvent
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> BitwiseNot
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickLeft) => #9
            SubscribeSubject GiveRewardRight
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterRight) => #12
            SubscribeSubject GiveRewardRight
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterLeft) => #16
            #3, #6, #9, #12, #16 -> Merge
            -> SoftwareEventVisualizerBuilder
              FontSize=16
              TimeWindow=20
              ShadedAreaPlotters
                ShadedAreaPlotter(EventName=QuiscentPeriod, Color=Gold, Alpha=0.3)
                ShadedAreaPlotter(EventName=ResponsePeriod, Color=SandyBrown, Alpha=0.3)
                ShadedAreaPlotter(EventName=RewardConsumptionPeriod, Color=RosyBrown, Alpha=0.3)
                ShadedAreaPlotter(EventName=ItiPeriod, Color=Green, Alpha=0.3)
              PointPlotters
                PointPlotter(EventName=LickLeft, Color=Red, YPosition=0.9, MarkerSize=6, Marker=Down)
                PointPlotter(EventName=LickRight, Color=Blue, YPosition=0.1, MarkerSize=6, Marker=Up)
                PointPlotter(EventName=IsRightTriggerQuickRetract, Color=DarkCyan, YPosition=0.5, MarkerSize=6, Marker=Plus)
                PointPlotter(EventName=DeliverSecondaryReinforcer, Color=Sienna, YPosition=0.5, MarkerSize=6, Marker=Plus)
                PointPlotter(EventName=WaterRight, Color=Blue, YPosition=0.2, MarkerSize=6, Marker=Circle)
                PointPlotter(EventName=WaterLeft, Color=Red, YPosition=0.8, MarkerSize=6, Marker=Circle)
              TrialBreakEventName=""
              MaxTrials=5
            -> VisualizerMapping => #19
            #2, #19 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping => #1
        GroupWorkflow ManualOverrides
            Defer OffsetControl
                DoubleProperty(Value=0.05)
                -> Take(Count=1)
                -> BehaviorSubject BumpSize

                SubscribeSubject ManipulatorBiasTracker
                -> Format(Format={0:F2})
                -> PropertyMapping(Text)
                -> Bonsai.Gui.ButtonBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20.25pt", Text=0.00)
                -> VisualizerMapping => #7
                Bonsai.Gui.ButtonBuilder Left(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt", Text=◀️)
                -> Sink BumpLeft
                    WorkflowInput Source1 => #0
                    SubscribeSubject BumpSize => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> Multiply(Operand=DoubleProperty(Value=-1))
                    -> MulticastSubject ManualSpoutDelta
                    -> WorkflowOutput
                -> VisualizerMapping => #10
                Bonsai.Gui.ButtonBuilder Right(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt", Text=▶)
                -> Sink BumpRight
                    WorkflowInput Source1 => #0
                    SubscribeSubject BumpSize => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject ManualSpoutDelta
                    -> WorkflowOutput
                -> VisualizerMapping => #13
                #10, #13 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
                -> VisualizerMapping => #15
                SubscribeSubject ExperimentState
                -> PropertyMapping(Enabled) => #17
                #7, #15, #17 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 22.125pt", ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
                -> WorkflowOutput
            -> VisualizerMapping
            -> Bonsai.Gui.GroupBoxBuilder "Spout offset"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt", Text="Spout offset")
            -> VisualizerMapping => #3
            Defer GiveWaterUI
                Bonsai.Gui.ButtonBuilder Left(Enabled=true, Visible=true, Text=💧◀)
                -> Sink TriggerLeft
                    WorkflowInput Source1
                    -> BooleanProperty(Value=false)
                    -> MulticastSubject GiveManualWaterRight
                    -> WorkflowOutput
                -> VisualizerMapping => #2
                Bonsai.Gui.ButtonBuilder Right(Enabled=true, Visible=true, Text=💧▶)
                -> Sink TriggerRight
                    WorkflowInput Source1
                    -> BooleanProperty(Value=true)
                    -> MulticastSubject GiveManualWaterRight
                    -> WorkflowOutput
                -> VisualizerMapping => #5
                #2, #5 -> Bonsai.Gui.TableLayoutPanelBuilder ManualWater
                  Enabled=true
                  Visible=true
                  ColumnCount=2
                  RowCount=1
                  ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.5), ColumnStyle(SizeType=Percent, Width=0.5))
                  RowStyles=""
                  CellSpans=""
                -> WorkflowOutput

                BehaviorSubject<System.Boolean> GiveManualWaterRight
                -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=GiveManualWaterRight)
                -> MulticastSubject GiveRewardRight
            -> VisualizerMapping
            -> Bonsai.Gui.GroupBoxBuilder 💧(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="")
            -> VisualizerMapping => #7
            Defer ForceAutoWater
                SubscribeSubject GlobalAutoWaterState
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !it.IsLeft
                -> PropertyMapping(Enabled)
                -> Bonsai.Gui.ButtonBuilder SetLeft(Enabled=true, Visible=true, Text=🎣◀)
                -> Sink UpdateGlobalState
                    WorkflowInput Source1 => #0
                    SubscribeSubject GlobalAutoWaterState => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #3
                    ExternalizedMapping(Expression) => #4
                    #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it.SetLeft()
                    -> MulticastSubject GlobalAutoWaterState
                    -> WorkflowOutput
                -> VisualizerMapping => #5
                SubscribeSubject GlobalAutoWaterState
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: !it.IsRight
                -> PropertyMapping(Enabled)
                -> Bonsai.Gui.ButtonBuilder SetRight(Enabled=true, Visible=true, Text=🎣▶)
                -> Sink UpdateGlobalState
                    WorkflowInput Source1 => #0
                    SubscribeSubject GlobalAutoWaterState => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #3
                    ExternalizedMapping(Expression) => #4
                    #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it.SetRight()
                    -> MulticastSubject GlobalAutoWaterState
                    -> WorkflowOutput
                -> VisualizerMapping => #11
                SubscribeSubject GlobalAutoWaterState
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.HasValue
                -> PropertyMapping(Enabled)
                -> Bonsai.Gui.ButtonBuilder Reset(Enabled=false, Visible=true, Text=❎)
                -> Sink UpdateGlobalState
                    WorkflowInput Source1 => #0
                    SubscribeSubject GlobalAutoWaterState => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #3
                    ExternalizedMapping(Expression) => #4
                    #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it.Reset()
                    -> MulticastSubject GlobalAutoWaterState
                    -> WorkflowOutput
                -> VisualizerMapping => #17
                #5, #11, #17 -> Bonsai.Gui.TableLayoutPanelBuilder ForceAutoWater(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
                -> WorkflowOutput
            -> VisualizerMapping
            -> Bonsai.Gui.GroupBoxBuilder 🎣(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 8.25pt", Text="")
            -> VisualizerMapping => #11
            #7, #11 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 15.75pt")
            -> VisualizerMapping => #13
            #3, #13 -> Bonsai.Gui.TableLayoutPanelBuilder "Manual Control"(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 36pt", ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
            -> WorkflowOutput
        -> VisualizerMapping => #3
        Defer LauncherControl
            AllenNeuralDynamics.Core.Design.AnnotationSource
            -> VisualizerMapping => #1
            SubscribeSubject ExperimentState
            -> BitwiseNot
            -> PropertyMapping(Enabled)
            -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
            -> PublishSubject StartExperimentToggleButton
            -> VisualizerMapping => #7
            Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
            -> PublishSubject EndExperimentButton
            -> VisualizerMapping => #10
            #1, #7, #10 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
              Enabled=true
              Visible=true
              Font="Microsoft Sans Serif, 26pt"
              ColumnCount=2
              RowCount=4
              ColumnStyles=""
              RowStyles=""
              CellSpans(CellSpan(ColumnSpan=2, RowSpan=3), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
            -> WorkflowOutput

            SubscribeSubject StartExperimentToggleButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject StartExperimentShortcut

            SubscribeSubject EndExperimentButton
            -> Take(Count=1)
            -> Unit
            -> MulticastSubject EndExperiment => #20
            SubscribeSubject StartExperiment => #21
            #20, #21 -> SubscribeWhen
        -> VisualizerMapping => #5
        IncludeWorkflow(Path=Extensions\ValveUi.bonsai)
        -> VisualizerMapping => #7
        #5, #7 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
        -> VisualizerMapping => #9
        #3, #9 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #11
        #1, #11 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans(CellSpan(ColumnSpan=2, RowSpan=1)))
        -> VisualizerMapping => #13
        SubscribeSubject TriggeredCamerasStream
        -> IncludeWorkflow(Path=Extensions\SpinnakerCameraControllerSaturationVisualizer.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #16
        IncludeWorkflow(Path=Extensions\AindManipulatorGui.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #18
        #16, #18 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #20
        #13, #20 -> Bonsai.Gui.TableLayoutPanelBuilder
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.75), ColumnStyle(SizeType=Percent, Width=0.25))
          RowStyles=""
          CellSpans=""
        -> VisualizerMapping => #22
        SubscribeSubject GlobalTrial
        -> TrialTableVisualizerBuilder(History=2, FontSize=16)
        -> VisualizerMapping => #25
        #22, #25 -> Bonsai.Gui.TabControlBuilder(Enabled=true, Visible=true)
        -> WorkflowOutput
    -> Disable Bonsai.Design.VisualizerWindow(Text=DynamicForaging, Visible=true, Location=nil, Size=nil, WindowState=Maximized)

    GroupWorkflow ImGuiContext
        Bonsai.ImGui.Visualizers.ImPlotVisualizerBuilder
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Frame
        -> WorkflowOutput

    GroupWorkflow DataTransformations
        SubscribeSubject GlobalTrialOutcome
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> BehaviorSubject TimedTrial

        SubscribeSubject GlobalTrialMetrics
        -> MemberSelector(Selector=Bias)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new (it as Bias)
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> BehaviorSubject TimedBias

        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject LickRight

        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> WorkflowOutput
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject LickLeft

        SubscribeSubject SoftwareEvent => #16
        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickRight) => #19
        SubscribeSubject IsRightLickEvent
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LickLeft) => #22
        SubscribeSubject GiveRewardRight
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterRight) => #25
        SubscribeSubject GiveRewardRight
        -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=WaterLeft) => #29
        #16, #19, #22, #25, #29 -> Merge
        -> IncludeWorkflow HarpTimestampSource(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
        -> Timestamp
        -> AllenNeuralDynamics.Core.Design.AccumulateToImmutableList
        -> BehaviorSubject EthogramEvents

    GroupWorkflow OutputControl
        GroupWorkflow Manipulator
            PublishSubject<System.Reactive.Unit> UiManipulatorLeft
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=-1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorRight
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=1, Y1=0, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorForwardLeft
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorForwardRight
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorBackLeft
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=-1, Y2=0, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorBackRight
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=-1, Z=0) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorUp
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorDown
            -> Sink MoveRelative
                WorkflowInput Source1
                -> AllenNeuralDynamics.AindManipulator.ManipulatorPosition(X=0, Y1=0, Y2=0, Z=-1) => #1
                SubscribeSubject OffsetGain => #2
                #1, #2 -> WithLatestFrom
                -> Multiply
                -> MulticastSubject MoveBy
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorHome
            -> Sink Home
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject HomeMotors
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorStop
            -> Sink StopMotors
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject StopMotors
                -> WorkflowOutput

            PublishSubject<System.Reactive.Unit> UiManipulatorInitialize
            -> Sink GoToInitialPosition
                WorkflowInput Source1
                -> Unit
                -> MulticastSubject GoToInitialPosition
                -> WorkflowOutput

            BehaviorSubject<System.Single> OffsetGain

        PublishSubject<System.Single> UiHabituationTimeUpdate

        DoubleProperty(Value=0.05)
        -> Take(Count=1)
        -> BehaviorSubject BumpSize

        PublishSubject<System.Reactive.Unit> UiMoveLeft
        -> Sink BumpLeft
            WorkflowInput Source1 => #0
            SubscribeSubject BumpSize => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> Multiply(Operand=DoubleProperty(Value=-1))
            -> MulticastSubject ManualSpoutDelta
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiMoveRight
        -> Sink BumpRight
            WorkflowInput Source1 => #0
            SubscribeSubject BumpSize => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject ManualSpoutDelta
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiGiveRight
        -> Sink TriggerRight
            WorkflowInput Source1
            -> BooleanProperty(Value=true)
            -> MulticastSubject GiveManualWaterRight
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiGiveLeft
        -> Sink TriggerLeft
            WorkflowInput Source1
            -> BooleanProperty(Value=false)
            -> MulticastSubject GiveManualWaterRight
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiCueGiveLeft
        -> Sink UpdateGlobalState
            WorkflowInput Source1 => #0
            SubscribeSubject GlobalAutoWaterState => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Expression) => #4
            #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.SetLeft()
            -> MulticastSubject GlobalAutoWaterState
            -> WorkflowOutput

        PublishSubject<System.Reactive.Unit> UiCueGiveRight
        -> Sink UpdateGlobalState
            WorkflowInput Source1 => #0
            SubscribeSubject GlobalAutoWaterState => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Expression) => #4
            #3, #4 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.SetRight()
            -> MulticastSubject GlobalAutoWaterState
            -> WorkflowOutput

        PublishSubject<System.Boolean> UiKeepBothOpen
        PublishSubject<System.Boolean> UiKeepLeftOpen
        PublishSubject<System.Boolean> UiKeepRightOpen

        PublishSubject<System.Reactive.Unit> UiDrainLeft
        -> BooleanProperty(Value=true)
        -> MulticastSubject IsFlushingValveLeft

        PublishSubject<System.Reactive.Unit> UiDrainRight
        -> BooleanProperty(Value=true)
        -> MulticastSubject IsFlushingValveLeft

        PublishSubject<System.Reactive.Unit> UiDrainBoth
        -> BooleanProperty(Value=true)
        -> MulticastSubject IsFlushingValveLeft
        -> BooleanProperty(Value=true)
        -> MulticastSubject IsFlushingValveLeft

        BehaviorSubject<System.Boolean> GiveManualWaterRight
        -> IncludeWorkflow(Path=Extensions\InlineSoftwareEvent.bonsai, EventName=GiveManualWaterRight)
        -> MulticastSubject GiveRewardRight

        BehaviorSubject<System.Boolean> IsFlushingValveLeft
        -> CreateObservable Flush
            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #3
            ExternalizedMapping(Value(DisplayName=IsRight)) => #4
            #3, #4 -> BooleanProperty(Value=false) => #5
            DoubleProperty(Value=500) => #6
            #5, #6 -> WithLatestFrom
            -> MulticastSubject SetIsRightValveMs
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight
            -> Delay(DueTime=PT0.5S) => #12
            FloatProperty(Value=5000) => #13
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Calibration.WaterValveLeft) => #15
            #13, #15 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #17
              Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
            Annotation ToMilliseconds(Text="") => #18
            #17, #18 -> Multiply(Operand=DoubleProperty(Value=1000))
            -> Bonsai.Scripting.Expressions.ExpressionTransform DivideByEachOpen
              Expression: Math.Ceiling(it / 500)
            -> PropertyMapping(Count) => #21
            #12, #21 -> RepeatCount(Count=300)
            -> LastOrDefault
            -> BooleanProperty(Value=false)
            -> MulticastSubject IsFlushingValveLeft => #25
            #2, #25 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

        BehaviorSubject<System.Boolean> IsFlushingValveRight
        -> CreateObservable Flush
            WorkflowInput Source1
            -> BitwiseNot
            -> Condition => #2
                WorkflowInput Source1
                -> WorkflowOutput
            Timer(DueTime=PT0.1S) => #3
            ExternalizedMapping(Value(DisplayName=IsRight)) => #4
            #3, #4 -> BooleanProperty(Value=true) => #5
            DoubleProperty(Value=500) => #6
            #5, #6 -> WithLatestFrom
            -> MulticastSubject SetIsRightValveMs
            -> Delay(DueTime=PT0.02S)
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject GiveRewardRight
            -> Delay(DueTime=PT0.5S) => #12
            FloatProperty(Value=5000) => #13
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Calibration.WaterValveRight) => #15
            #13, #15 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #17
              Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
            Annotation ToMilliseconds(Text="") => #18
            #17, #18 -> Multiply(Operand=DoubleProperty(Value=1000))
            -> Bonsai.Scripting.Expressions.ExpressionTransform DivideByEachOpen
              Expression: Math.Ceiling(it / 500)
            -> PropertyMapping(Count) => #21
            #12, #21 -> RepeatCount(Count=300)
            -> LastOrDefault
            -> BooleanProperty(Value=false)
            -> MulticastSubject IsFlushingValveRight => #25
            #2, #25 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

    GroupWorkflow VisualizerStructure
        ExternalizedMapping(Name(DisplayName=FrameSubject))
        -> SubscribeSubject Frame => #1
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=2, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0) => #3
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=None, OuterSize(X=0, Y=0), InnerWidth=0) => #5
        -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Behavior => #7
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Bias => #9
        #5 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Ethogram => #11
        #7, #9, #11 -> CombineLatest => #12
        #3 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> PublishSubject Camera => #14
        #12, #14 -> CombineLatest
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TableBuilder(Visible=true, Columns=1, Flags=Borders, OuterSize(X=0, Y=0), InnerWidth=0)
        -> PublishSubject Metadata => #18
        #1 -> Bonsai.ImGui.TableNextColumnBuilder(Visible=true)
        -> Bonsai.ImGui.TabBarBuilder(Visible=true, Flags=None) => #20
        -> Bonsai.ImGui.TabItemBuilder PreSession(Visible=true, Text=pre-session, Flags=None)
        -> PublishSubject PreSession => #22
        #20 -> Bonsai.ImGui.TabItemBuilder IntraSession(Visible=true, Text=intra-session, Flags=None)
        -> PublishSubject IntraSession => #24
        #18, #22, #24 -> CombineLatest

    IncludeWorkflow
      Path=Extensions\BehaviorVisualizer.bonsai
      PlotName=Behavior1
      LickLeftSubject=LickLeft
      LickRightSubject=LickRight
      TrialSubject=TimedTrial
      FrameSubject=Behavior

    IncludeWorkflow(Path=Extensions\BiasVisualizer.bonsai, FrameSubject=Bias, TimedBias=TimedBias)

    SubscribeSubject Ethogram => #9
    SubscribeSubject EthogramEvents
    -> PropertyMapping(SoftwareEvents) => #11
    #9, #11 -> SoftwareEventVisualizer
      Visible=true
      SoftwareEvents=""
      TrialBreakEventName=Break
      PlotHeight=200
      ShadedAreaPlotters
        ShadedAreaPlotter(EventName=QuiescentPeriod, Color=Gold, Alpha=0.3)
        ShadedAreaPlotter(EventName=ResponsePeriod, Color=SandyBrown, Alpha=0.3)
        ShadedAreaPlotter(EventName=RewardConsumptionPeriod, Color=RosyBrown, Alpha=0.3)
        ShadedAreaPlotter(EventName=ItiPeriod, Color=Green, Alpha=0.3)
      PointPlotters
        PointPlotter(EventName=LickLeft, Color=Red, YPosition=0.9, MarkerSize=6, Marker=Down)
        PointPlotter(EventName=LickRight, Color=Blue, YPosition=0.1, MarkerSize=6, Marker=Up)
        PointPlotter(EventName=IsRightTriggerQuickRetract, Color=DarkCyan, YPosition=0.5, MarkerSize=6, Marker=Plus)
        PointPlotter(EventName=DeliverSecondaryReinforcer, Color=Sienna, YPosition=0.5, MarkerSize=6, Marker=Plus)
        PointPlotter(EventName=WaterRight, Color=Red, YPosition=0.2, MarkerSize=6, Marker=Circle)
        PointPlotter(EventName=WaterLeft, Color=Blue, YPosition=0.8, MarkerSize=6, Marker=Circle)

    Unit => #13
    -> IncludeWorkflow
      Path=Extensions\CameraPreviewVisualizer.bonsai
      FrameSubject=Camera
      CameraName=Camera1
      MinSaturation=53
      MaxSaturation=215
      FlipState=2
      Rotation=0
      TriggeredCamerasStream=TriggeredCamerasStream
    #13 -> IncludeWorkflow
      Path=Extensions\CameraPreviewVisualizer.bonsai
      FrameSubject=Camera
      CameraName=Camera2
      MinSaturation=53
      MaxSaturation=215
      FlipState=2
      Rotation=0
      TriggeredCamerasStream=TriggeredCamerasStream

    SubscribeSubject SessionSchema
    -> IncludeWorkflow
      Path=Extensions\MetadataVisualizer.bonsai
      FrameSubject=Metadata
      StartExperimentSubject=StartExperimentShortcut
      EndExperimentSubject=EndExperiment
      UiHabituationTimeUpdate=UiHabituationTimeUpdate

    IncludeWorkflow
      Path=Extensions\PreSessionVisualizer.bonsai
      FrameSubject=PreSession
      UiKeepLeftOpne=UiKeepLeftOpen
      UiKeepRightOpen=UiKeepRightOpen
      UiKeepBothOpen=UiKeepBothOpen
      UiDrainLeft=UiDrainLeft
      UiDrainRight=UiDrainRight
      UiDrainBoth=UiDrainBoth
      UiManipulatorLeft=UiManipulatorLeft
      UiManipulatorForwardLeft=UiManipulatorForwardLeft
      UiManipulatorForwardRight=UiManipulatorForwardRight
      UiManipulatorUp=UiManipulatorUp
      UiManipulatorRight=UiManipulatorRight
      UiManipulatorBackLeft=UiManipulatorBackLeft
      UiManipulatorBackRight=UiManipulatorBackRight
      UiManipulatorDown=UiManipulatorDown
      UiManipulatorStop=UiManipulatorStop
      UiManipulatorHome=UiManipulatorHome
      UiControlManipulator=UiManipulatorInitialize

    IncludeWorkflow
      Path=Extensions\IntraSessionVisualizer.bonsai
      FrameSubject=IntraSession
      UiGiveLeft=UiGiveLeft
      UiGiveRight=UiGiveRight
      UiMoveLeft=UiMoveLeft
      UiMoveRight=UiMoveRight
