<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:imvizui="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers.Design"
                 xmlns:implot="clr-namespace:Bonsai.ImPlot;assembly=Bonsai.ImPlot"
                 xmlns:imviz="clr-namespace:Bonsai.ImGui.Visualizers;assembly=Bonsai.ImGui.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>TrialData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickLeft</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>S</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LickRight</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0.1</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>-0.1</p1:Lower>
                <p1:Upper>0.1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>BiasRandom</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.01S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.01</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>500</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>1</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>0.05</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="DoubleProperty">
                <Value>3.14</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Sin" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it +1) * 0.5</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it</scr:Expression>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateNullableBoolean">
                <p2:Value>true</p2:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.9</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateNullableBoolean">
                <p2:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item3 ?  Item2 : Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>500</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>1</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>0.05</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Sin" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>(it +1) * 0.5</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="IsRightChoice" Selector="Item3" />
                <Property Name="IsRewarded" Selector="Item5" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="PRewardLeft" Selector="Item2" />
                <Property Name="PRewardRight" Selector="Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateNullableBoolean">
                <p2:Value>false</p2:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateNullableBoolean">
                <p2:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleMany">
                <p1:Count>500</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0.05</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Item3 ? Item1 : Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="IsAutoResponseRight" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Trial">
                <p3:PRewardLeft>0.59164587077011477</p3:PRewardLeft>
                <p3:PRewardRight>0.40913708100521279</p3:PRewardRight>
                <p3:RewardConsumptionDuration>5</p3:RewardConsumptionDuration>
                <p3:RewardDelayDuration>0</p3:RewardDelayDuration>
                <p3:ResponseDeadlineDuration>5</p3:ResponseDeadlineDuration>
                <p3:QuiescencePeriodDuration>0.5</p3:QuiescencePeriodDuration>
                <p3:InterTrialIntervalDuration>5</p3:InterTrialIntervalDuration>
                <p3:IsAutoResponseRight xsi:nil="true" />
                <p3:LickspoutOffsetDelta>0</p3:LickspoutOffsetDelta>
              </Combinator>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Trial" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:TrialOutcome">
                <p3:IsRightChoice>true</p3:IsRightChoice>
                <p3:IsRewarded>false</p3:IsRewarded>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>SampleTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.874S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimeBase</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TimedTrial</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="45" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="45" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="36" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="34" To="36" Label="Source3" />
            <Edge From="35" To="36" Label="Source2" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="45" Label="Source3" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="45" Label="Source4" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source5" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="45" To="47" Label="Source1" />
            <Edge From="45" To="59" Label="Source1" />
            <Edge From="46" To="64" Label="Source1" />
            <Edge From="47" To="62" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="52" To="57" Label="Source2" />
            <Edge From="53" To="57" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source3" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source2" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="61" Label="Source1" />
            <Edge From="61" To="62" Label="Source2" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="63" To="64" Label="Source2" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="66" Label="Source1" />
            <Edge From="66" To="68" Label="Source1" />
            <Edge From="67" To="68" Label="Source2" />
            <Edge From="68" To="69" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="imvizui:ImPlotVisualizerBuilder" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>Frame</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\BehaviorVisualizer.bonsai">
        <PlotName>Behavior1</PlotName>
        <LickLeftSubject>LickLeft</LickLeftSubject>
        <LickRightSubject>LickRight</LickRightSubject>
        <TrialSubject>TimedTrial</TrialSubject>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Frame</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="implot:PlotBuilder">
          <implot:Name>BiasPlot</implot:Name>
          <implot:Visible>true</implot:Visible>
          <implot:Size>
            <implot:X>-1</implot:X>
            <implot:Y>150</implot:Y>
          </implot:Size>
          <implot:Flags>NoTitle</implot:Flags>
          <implot:FlagsX>AutoFit</implot:FlagsX>
          <implot:FlagsY>None</implot:FlagsY>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>BiasPlot</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Unit" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="imviz:LatestOnNewFrame">
          <Name>BiasPlot</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p2:PlotStyling">
            <p2:TickPositions>
              <p2:double>-1</p2:double>
              <p2:double>1</p2:double>
            </p2:TickPositions>
            <p2:TickLabels>
              <p2:string>R</p2:string>
              <p2:string>L</p2:string>
            </p2:TickLabels>
            <p2:ImPlotLocationFlags>West</p2:ImPlotLocationFlags>
            <p2:ImPlotLegendFlags>None</p2:ImPlotLegendFlags>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>TimedTrial</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>BiasRandom</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:WithLatestFrom" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Item2</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:Sample" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Accumulate" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Expression>it &gt; 1 ? 1 : it</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Expression>it &lt; -1 ? -1 : it</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Seconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Zip" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="harp:CreateTimestamped" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="imviz:RollingBufferBuilder">
          <imviz:Capacity>1000</imviz:Capacity>
          <imviz:IndexSelector>Seconds</imviz:IndexSelector>
          <imviz:ValueSelector>Value</imviz:ValueSelector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="imviz:LatestOnNewFrame">
          <Name>BiasPlot</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p2:LineStyling">
            <p2:ColorR>0</p2:ColorR>
            <p2:ColorG>0</p2:ColorG>
            <p2:ColorB>0</p2:ColorB>
            <p2:ColorA>1</p2:ColorA>
            <p2:LineThickness>2</p2:LineThickness>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="imviz:PlotLineSeriesBuilder">
          <imviz:Visible>true</imviz:Visible>
          <imviz:Flags>None</imviz:Flags>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="imviz:RollingBufferBuilder">
          <imviz:Capacity>1</imviz:Capacity>
          <imviz:IndexSelector>Seconds</imviz:IndexSelector>
          <imviz:ValueSelector>Value</imviz:ValueSelector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="imviz:LatestOnNewFrame">
          <Name>BiasPlot</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p2:ScatterStyling">
            <p2:ImPlotMarker>Circle</p2:ImPlotMarker>
            <p2:Size>5</p2:Size>
            <p2:FillColorR>0</p2:FillColorR>
            <p2:FillColorG>1</p2:FillColorG>
            <p2:FillColorB>0</p2:FillColorB>
            <p2:FillColorA>1</p2:FillColorA>
            <p2:OutlineColorR>0</p2:OutlineColorR>
            <p2:OutlineColorG>0</p2:OutlineColorG>
            <p2:OutlineColorB>0</p2:OutlineColorB>
            <p2:OutlineColorA>1</p2:OutlineColorA>
            <p2:OutlineWeight>1</p2:OutlineWeight>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="implot:PlotScatter">
            <implot:Visible>true</implot:Visible>
            <implot:Flags>None</implot:Flags>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="10" To="18" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="25" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>